PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = ATTIVANTE
  keyboardBackend = ioHub
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Routines
  Routine conferma
    TextComponent text_continue
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = CONTINUARE?
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_fase_esplorativa
    TextComponent text_trial_fase_esplorativa
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text [set every frame] = $str(round(routineTimer.getTime(),1)) + " s"
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    CodeComponent code_trial_fase_esplorativa
      Code Type = Py
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      Begin Routine:
        # # # # #
        # DATA COLLECTION

        # Start the streaming of data.
        tracker.enable_send_data(True)

        # Log the start.
        tracker.user_data("INIZIO_FASE_ESPLORATIVA")
        tracker.user_data("0")
      End Routine:
        # Log the end of data collection.
        tracker.user_data("FINE_FASE_ESPLORATIVA")
        tracker.user_data("0")

        # Stop the streaming of data.
        tracker.enable_send_data(False)
  Routine fase_esplorativa
    TextComponent text_fase_esplorativa
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        FASE ESPLORATIVA
        (3 MINUTI)

        PREMERE BARRA SPAZIATRICE PER INIZIARE
    KeyboardComponent key_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent Calibrate_GP
      Code Type = Py
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      Begin Experiment:
        #make sure the constraints.py file is in experiment folder
        import os
        import time

        from opengaze import OpenGazeTracker

        # Construct the path to the log file.
        dirname = os.path.dirname(os.path.abspath(__file__))
        fname = os.path.join(dirname, '%s.tsv' % (time.strftime("%Y-%m-%d_%H-%M-%S")))

        # Open the connection to the tracker.
        tracker = OpenGazeTracker(logfile=fname, debug=False)
        time.sleep(1.0)

        # Enable the tracker to send ALL the things.
        tracker.enable_send_counter(True)
        tracker.enable_send_cursor(True)
        tracker.enable_send_eye_left(True)
        tracker.enable_send_eye_right(True)
        tracker.enable_send_pog_best(True)
        tracker.enable_send_pog_fix(True)
        tracker.enable_send_pog_left(True)
        tracker.enable_send_pog_right(True)
        tracker.enable_send_pupil_left(True)
        tracker.enable_send_pupil_right(True)
        tracker.enable_send_time(True)
        tracker.enable_send_time_tick(True)
        tracker.enable_send_user_data(True)
        tracker.enable_send_blink(True)
        tracker.enable_send_pupilmm(True)
        tracker.enable_send_dial(True)
        tracker.enable_send_gsr(True)
        tracker.enable_send_heart_rate(True)
        tracker.enable_send_heart_rate_pulse(True)
        tracker.enable_send_ttl(True)
        tracker.enable_send_user_data(True)
        # Reset the user-defined variable.
        tracker.user_data("0")
        tracker.screen_size(0,0,1280,720)

        # # # # #
        # CALIBRATION
        tracker.calibrate_reset()
        tracker.calibrate_show(True)
        tracker.calibrate_start(True)
        result = None
        while result == None:
            result = tracker.get_calibration_result()
            time.sleep(0.1)
        tracker.calibrate_show(False)
      End Experiment:
        # # # # #
        # CLOSE

        # Close the connection.
        tracker.close()
  Routine fine
    TextComponent text_fine_esperimento
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        FINE ESPERIMENTO

        (PREMERE BARRA SPAZIATRICE)
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fase_topolino_1
    TextComponent text_fase_topolino_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        FASE TOPOLINO 1
        (6 MINUTI 32 SECONDI)

        PREMERE BARRA SPAZIATRICE PER INIZIARE
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_fase_topolino_1
    TextComponent text_trial_fase_topolino_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 392
      text [set every frame] = $str(round(routineTimer.getTime(),1)) + " s"
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    CodeComponent code_trial_fase_topolino_1
      Code Type = Py
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      Begin Routine:
        # # # # #
        # DATA COLLECTION

        # Start the streaming of data.
        tracker.enable_send_data(True)

        # Log the start.
        tracker.user_data("INIZIO_FASE_TOPOLINO_1")
        tracker.user_data("0")
      End Routine:
        # Log the end of data collection.
        tracker.user_data("FINE_FASE_TOPOLINO_1")
        tracker.user_data("0")

        # Stop the streaming of data.
        tracker.enable_send_data(False)
  Routine trial_fase_resting_state_1
    TextComponent text_trial_fase_resting_state_1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 420
      text [set every frame] = $str(round(routineTimer.getTime(),1)) + " s"
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    CodeComponent code_trial_fase_resting_state_1
      Code Type = Py
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      Begin Routine:
        # # # # #
        # DATA COLLECTION

        # Start the streaming of data.
        tracker.enable_send_data(True)

        # Log the start.
        tracker.user_data("INIZIO_RESTING_STATE_1")
        tracker.user_data("0")
      End Routine:
        # Log the end of data collection.
        tracker.user_data("FINE_RESTING_STATE_1")
        tracker.user_data("0")

        # Stop the streaming of data.
        tracker.enable_send_data(False)
  Routine fase_resting_state
    TextComponent text_fase_resting_state
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        FASE RESTING STATE
        (7 MINUTI)

        PREMERE BARRA SPAZIATRICE PER INIZIARE
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_fase_resting_state_2
    TextComponent text_trial_fase_resting_state_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 420
      text [set every frame] = $str(round(routineTimer.getTime(),1)) + " s"
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    CodeComponent code_trial_fase_resting_state_2
      Code Type = Py
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      Begin Routine:
        # # # # #
        # DATA COLLECTION

        # Start the streaming of data.
        tracker.enable_send_data(True)

        # Log the start.
        tracker.user_data("INIZIO_RESTING_STATE_2")
        tracker.user_data("0")
      End Routine:
        # Log the end of data collection.
        tracker.user_data("FINE_RESTING_STATE_2")
        tracker.user_data("0")

        # Stop the streaming of data.
        tracker.enable_send_data(False)
  Routine fase_topolino_2
    TextComponent text_fase_topolino_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        FASE TOPOLINO 2
        (6 MINUTI 38 SECONDI)

        PREMERE BARRA SPAZIATRICE PER INIZIARE
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_topolino_2
    TextComponent text_trial_fase_topolino_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 398
      text [set every frame] = $str(round(routineTimer.getTime(),1)) + " s"
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    CodeComponent code_trial_fase_topolino_2
      Code Type = Py
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      Begin Routine:
        # # # # #
        # DATA COLLECTION

        # Start the streaming of data.
        tracker.enable_send_data(True)

        # Log the start.
        tracker.user_data("INIZIO_FASE_TOPOLINO_2")
        tracker.user_data("0")
      End Routine:
        # Log the end of data collection.
        tracker.user_data("FINE_FASE_TOPOLINO_2")
        tracker.user_data("0")

        # Stop the streaming of data.
        tracker.enable_send_data(False)
  Routine fase_topolino_3
    TextComponent text_fase_topolino_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        FASE TOPOLINO 3
        (5 MINUTI 21 SECONDI)

        PREMERE BARRA SPAZIATRICE PER INIZIARE
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_topolino_3
    TextComponent text_trial_fase_topolino_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 321
      text [set every frame] = $str(round(routineTimer.getTime(),1)) + " s"
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    CodeComponent code_trial_fase_topolino_3
      Code Type = Py
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      Begin Routine:
        # # # # #
        # DATA COLLECTION

        # Start the streaming of data.
        tracker.enable_send_data(True)

        # Log the start.
        tracker.user_data("INIZIO_FASE_TOPOLINO_3")
        tracker.user_data("0")
      End Routine:
        # Log the end of data collection.
        tracker.user_data("FINE_FASE_TOPOLINO_3")
        tracker.user_data("0")

        # Stop the streaming of data.
        tracker.enable_send_data(False)
Flow
  Routine fase_esplorativa
  Routine conferma
  Routine trial_fase_esplorativa
  Routine fase_resting_state
  Routine conferma
  Routine trial_fase_resting_state_1
  Routine fase_topolino_1
  Routine conferma
  Routine trial_fase_topolino_1
  Routine fase_resting_state
  Routine conferma
  Routine trial_fase_resting_state_2
  Routine fase_topolino_2
  Routine conferma
  Routine trial_topolino_2
  Routine fase_topolino_3
  Routine conferma
  Routine trial_topolino_3
  Routine fine
